<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice tag="eyelink" type="eyelink" data_interval="1ms" tracker_ip="10.1.1.2" eye_rx="eye_h_digital" eye_ry="eye_v_digital" eye_lx="" eye_ly="" eye_x="" eye_y="" eye_z="" href_rx="" href_ry="" href_lx="" href_ly="" pupil_rx="" pupil_ry="" pupil_lx="" pupil_ly="" pupil_size_r="" pupil_size_l="" eye_time="" tracking_dist="1024" alt="dummy_eyelink"></iodevice>
        <iodevice tag="dummy_eyelink" type="dummy" alt=""></iodevice>
        <iodevice type="nidaq" tag="nidaq" name="Dev1" update_interval="3ms" analog_input_data_interval="1ms" analog_output_data_interval="1ms" assume_multiplexed_adc="YES">
            <iochannel type="nidaq_analog_input_voltage" tag="ai0" channel_number="0" range_min="-10.0" range_max="10.0" voltage="eye_h_analog"></iochannel>
            <iochannel type="nidaq_analog_input_voltage" tag="ai1" channel_number="1" range_min="-10.0" range_max="10.0" voltage="eye_v_analog"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="eye_h_digital" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="eye_v_digital" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="eye_h_analog" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="eye_v_analog" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="done" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="assignment" tag="Reset done" variable="done" value="0"></action>
                    <action tag="Start eyelink" type="start_device_IO" device="eyelink"></action>
                    <action tag="Start nidaq" type="start_device_IO" device="nidaq"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="done" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop nidaq" type="stop_device_IO" device="nidaq"></action>
                    <action tag="Stop eyelink" type="stop_device_IO" device="eyelink"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>